PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'1', u'reward': u'juice'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = knowledge_probe
  Screen = 1
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Routines
  Routine feedback_mag
    TextComponent feedback_txt_2
      color = black
      text [set every repeat] = $text2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine feedback
    TextComponent feedback_txt
      color = black
      text [set every repeat] = $text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine trial_2
  Routine trial
    PolygonComponent stim
      fillColor [set every repeat] = $color_left
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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    RatingScaleComponent rating_prob
      labels = Low (0.25), Medium (0.5), High (0.75)
      pos = 0, -0.4
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_1
      color = black
      text = What is the probability of obtaining a reward when choosing this stimulus?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent nCorrect_txt_0
      text [set every repeat] = $nCorrect
      pos = (0.8, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    CodeComponent code
      Begin Experiment:
        #### START BEGIN EXPERIMENT SNIPPET ####

        nCorrect = 0

        #### END BEGIN EXPERIMENT SNIPPET ####
      Begin Routine:
        print n_edges_left
        stim.edges = n_edges_left
      End Routine:
        rating = rating_prob.getRating()
        print('original rating: %.2f' %rating)

        if rating == 1:
            rating = .25
        elif rating == 2:
            rating = .5
        elif rating == 3:
            rating = .75

        print('new rating: %.2f' %rating)

        if rating == prob1: # if coincides with left prob (the one we are using)
            feedback_txt.setColor("black")
            text = "Correct!"
            nCorrect += 1
            #feedback_txt.setText("Correct!")
        else:
            #feedback_txt.setText("Incorrect")
            feedback_txt.setColor("red")
            text = "Incorrect!"
            nCorrect = 0

        if nCorrect == 3:
            continueRoutine = False
            endExpNow = True
  Routine trial_mag
    PolygonComponent stim_2
      fillColor [set every repeat] = $color_left
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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    RatingScaleComponent rating_mag
      labels = 1,2,3
      pos = 0, -0.6
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_2
      color = black
      text = What is the amount of reward you will obtain if you are rewarded after having chosen this stimulus?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent nCorrect_txt
      text [set every repeat] = $nCorrect
      pos = (0.8, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    CodeComponent code_2
      Begin Routine:
        print n_edges_left
        stim_2.edges = n_edges_left
      End Routine:
        rating = rating_mag.getRating()
        print('original rating: %.2f' %rating)

        if rating == mag1: # if coincides with left prob (the one we are using)
            feedback_txt.setColor("black")
            text2 = "Correct!"
            nCorrect += 1
            #feedback_txt.setText("Correct!")
        else:
            #feedback_txt.setText("Incorrect")
            feedback_txt_2.setColor("red")
            text2 = "Incorrect!"
            nCorrect = 0

        if nCorrect == 3:
            continueRoutine = False
            endExpNow = True
  Routine stim_table
    PolygonComponent p1m1_img
      fillColor [set every repeat] = $p1
      pos = (-.5, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p1m2_img
      fillColor [set every repeat] = $p1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p1m3_img
      fillColor [set every repeat] = $p1
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p2m1_img
      fillColor [set every repeat] = $p2
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p2m2_img
      fillColor [set every repeat] = $p2
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p2m3_img
      fillColor [set every repeat] = $p2
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p3m1_img
      fillColor [set every repeat] = $p3
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p3m2_img
      fillColor [set every repeat] = $p3
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    PolygonComponent p3m3_img
      fillColor [set every repeat] = $p3
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.3, 0.3)
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    TextComponent magnitude_title_txt
      color = black
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Magnitude
    TextComponent mag_low_txt
      color = black
      text = Low
      pos = (-0.5, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent mag_med_txt
      color = black
      text = Medium
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent mag_high_txt
      color = black
      text = High
      pos = (0.5, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent prob_txt
      color = black
      text = Probability
      pos = (-0.75, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent prob_low_txt
      color = black
      text = Low
      pos = (-0.75, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent prob_med_txt
      color = black
      text = Medium
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent prob_high_txt
      color = black
      text = High
      pos = (-0.75, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Routine:
        p1m1_img.edges = m1
        p1m2_img.edges = m2
        p1m3_img.edges = m3
        p2m1_img.edges = m1
        p2m2_img.edges = m2
        p2m3_img.edges = m3
        p3m1_img.edges = m1
        p3m2_img.edges = m2
        p3m3_img.edges = m3
Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $'conditions_probe_'+expInfo['reward']+'.xlsx'
    loopType = random
    nReps = 1
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    Routine stim_table
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'conditions_'+expInfo['reward']+'.xlsx'
    loopType = random
    nReps = 2
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    Routine trial
    Routine feedback
    Routine trial_mag
    Routine feedback_mag
  LoopTerminator trials
