PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[0.506,0.506,0.506]
  Experiment info = {u'participant': u'001', u'use_scanner': u'0', u'use_eye_tracker': u'1', u'session': u'001', u'reward': u'juice', u'use_pumps': u'0'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Save log file = False
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = two_choice_juice_money
  Screen = 1
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Routines
  Routine ISI6
    StaticComponent isi6
      stopVal [duration (s)] = $ISI_duration
      startVal [time (s)] = 0.0
    CodeComponent code_10
      Begin Routine:
        ISI_duration = np.random.uniform(2.5)
  Routine ISI5
    StaticComponent isi5
      stopVal [duration (s)] = $ISI_duration
      startVal [time (s)] = 0.0
    CodeComponent code_8
      Begin Routine:
        ISI_duration = np.random.uniform(3)
  Routine ISI4
    StaticComponent isi4
      stopVal [duration (s)] = $ISI_duration
      startVal [time (s)] = 0.0
    CodeComponent code_7
      Begin Routine:
        ISI_duration = np.random.uniform(3)
  Routine ISI3
    CodeComponent code_6
      Begin Routine:
        ISI_duration = 0
    StaticComponent isi3
      stopVal [duration (s)] = $ISI_duration
      startVal [time (s)] = 0.0
  Routine feedback
    ImageComponent left_feedback
      stopVal [duration (s)] = 1
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      image = stim/noReward.png
      size = .4
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    ImageComponent right_feedback
      stopVal [duration (s)] = 1
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = stim/reward.png
      size = .4
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    TextComponent outcome_text
      color = red
      text = Trial missed!
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    CodeComponent code_3
      Begin Routine:
        # Start Begin Routine ("feedback" routine) snippet

        if key_resp_2.keys == 'left':
            right_feedback.setOpacity(0)

            if isReinforced:
                outcome_text.setText('')
                left_feedback.setImage('stim/reward.png')
            elif not isReinforced:
                outcome_text.setText('')
                left_feedback.setImage('stim/noReward.png')

        elif key_resp_2.keys == 'right':
            left_feedback.setOpacity(0)

            if isReinforced:
                outcome_text.setText('')
                right_feedback.setImage('stim/reward.png')
            elif not isReinforced:
                outcome_text.setText('')
                right_feedback.setImage('stim/noReward.png')

        elif key_resp_2.keys == 'none':
            outcome_text.setText('Trial missed!')
            left_feedback.setOpacity(0)
            right_feedback.setOpacity(0)

        writer_object.writerow(["feedback_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])


        # Finish Begin Routine snippet ("feedback" routine)
      End Routine:
        ##### START END ROUTINE FOR FEEDBACK ROUTINE ####

        writer_object.writerow(["feedback_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # take colour back to stimuli for next trial
        right_feedback.setOpacity(1)
        left_feedback.setOpacity(1)

        #### FINISH END ROUTINE SNIPPET FOR FEEDBACK ROUTINE ####
  Routine cue1
    ImageComponent first_cue
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0
      image [set every repeat] = $stim1
      size = .7
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    CodeComponent code_12
      Begin Routine:
        # START BEGIN ROUTINE CUE1 SNIPPET

        writer_object.writerow(["cue1_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # END BEGIN ROUTINE CUE1 SNIPPET
      End Routine:
        # START END ROUTINE CUE1 SNIPPET

        writer_object.writerow(["cue1_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # FINISH END ROUTINE CUE1 SNIPPET
  Routine prepare_stuff
  Routine chosen
    ImageComponent left_chosen
      stopVal [duration (s)] = 1
      pos = [-.5, 0]
      startVal [time (s)] = 0
      image [set every repeat] = $stim1
      size = .7
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    ImageComponent right_chosen
      stopVal [duration (s)] = 1
      pos = [.5, 0]
      startVal [time (s)] = 0
      image [set every repeat] = $stim2
      size = .7
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    ImageComponent selection_arrow
      stopVal [duration (s)] = 1
      pos [set every repeat] = [-7,-1]
      startVal [time (s)] = 0.0
      image = stim/arrow.png
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    CodeComponent code_2
      Begin Routine:
        # Start Begin Routine snippet ("chosen" routine)
        if key_resp_2.keys == 'none':
            selection_arrow.setOpacity(0)

        selection_arrow.setPos([arrow_x_pos,-0.4])
        writer_object.writerow(["chosen_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), key_resp_2.keys, isReinforced, resp_type, trial_ID])

        # Finish Begin Routine snippet
      End Routine:
        writer_object.writerow(["chosen_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        selection_arrow.setOpacity(1)
  Routine goodbye
    TextComponent goodbye_txt
      color = green
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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      text:
        Session finished!

        Trials missed:
    TextComponent nMissed_txt
      color = red
      text [set every repeat] = $nMissed
      stopVal [duration (s)] = 60
      pos = (0.4, -0.65)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    CodeComponent code_14
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'f'
      startVal [time (s)] = 0.0
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  Routine wait_scanner
    CodeComponent code_15
      Begin Routine:
        def wait_for_scanner():
            ''' discard the first three scans '''
            n_discard = 3
            wait_stim = visual.TextStim(win, 'Waiting for Scanner ...')
            wait_stim.autoDraw = True
            win.flip()
            for i in xrange(n_discard):
                keys = event.waitKeys(keyList='5')
                if i == 0:
                    clock = core.Clock() # set clock 0 to time of first scan
                    #log_session_start_time()
                wait_stim.setText(str(n_discard - i - 1))
                win.flip()
            wait_stim.autoDraw = False
            win.flip()
            return clock
      End Routine:
        if expInfo['use_scanner'] == 1:
            wait_for_scanner()
  Routine ISI2
    StaticComponent isi2
      stopVal [duration (s)] = ISI_duration
      startVal [time (s)] = 0.0
    CodeComponent code_5
      Begin Routine:
        ISI_duration = np.random.uniform(3)
  Routine trial
    ImageComponent resp_image
      stopVal [duration (s)] = 3
      pos = [0.0, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $resp_img
      size = .4
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    ImageComponent left_frac
      stopVal [duration (s)] = 3
      pos = [-.5, 0]
      startVal [time (s)] = 0
      image [set every repeat] = $stim1
      size = .7
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    ImageComponent right_frac
      stopVal [duration (s)] = 3
      pos = [.5, 0]
      startVal [time (s)] = 0
      image [set every repeat] = $stim2
      size = .7
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        # Start Begin Experiment snippet

        # Import libraries
        import numpy as np, csv, random, pumps

        debug = True # are we showing the debugging stuff on the screen?
        nMissed = 0

        def msg_to_screen(msg,x,y, autodraw=False):
            text_object=visual.TextStim(win, text=msg, pos=(x,y), color=u'red')
            text_object.setAutoDraw(autodraw) # autodraw is false so that the txt doesn't appear constantly
            text_object.draw()

        def show_debugging_stuff():
            #nextIntRnf_txt = visual.TextStim(win, text="nextIntRnf: " + str(intervalToRnf), pos=(0, 0.8), color=u'black')
            #nextIntRnf_txt.draw()

            t_txt=visual.TextStim(win, text='t: ' + str(round(t,2)), pos=(-0.5, 0.6), color=u'black')
            t_txt.draw()

            globalTimer_txt=visual.TextStim(win, text='timer: ' + str(round(globalClock.getTime(),2)), pos=(0.5, -0.6), color=u'black')
            globalTimer_txt.draw()

            #msg_to_screen('block: ' + str(block), -0.7, -0.9)
            msg_to_screen('prob1: ' + str(prob1), -0.6, -0.7)
            msg_to_screen('prob2: '+ str(prob2), -0.6, -0.8)
            msg_to_screen('stim1: ' + str(stim1), -0.6, -0.5)
            msg_to_screen('stim2: '+str(stim2), -0.6, -0.6)
            msg_to_screen('mag1: '+str(mag1), -0.6, 0.7)
            msg_to_screen('mag2: '+str(mag2), -0.6, 0.6)
            msg_to_screen('reward: '+str(reward), 0.5, -0.7)
            msg_to_screen('nMissed: '+str(nMissed), 0.5, -0.8)

        #def configure_pumps(volume=.75, diameter=26.77, rate=60, direction='INF', address=0):
        #    ''' configure pumps for the experiment '''

        #    p = pumps.Pump('/dev/ttyUSB0')

        #    s = p.volume(volume, address=address)  # how much to dispense
        #    s = p.diameter(diameter, address=address) # diameter of syringe
        #    s = p.rate(rate, address=address) # how fast
        #    s = p.direction(direction, address=address) # pump (not suck) liquid

        #    return p

        #p = configure_pumps()
        #address = 0 # use first pump

        # create a csv file to save response times etc
        file_name = 'data/S%s_%s_%s_%s' %(expInfo['participant'], expInfo['date'], expInfo['session'], expInfo['reward'])
        csv_file = open(file_name+'.csv', 'wb')
        writer_object = csv.writer(csv_file, delimiter=",")

        writer_object.writerow(['event', 't', 'participant', 'trial', 'session', 'reward', 'prob1', 'prob2', 'mag1', 'mag2','resp', 'wasRnf', 'resp_type'])
      Begin Routine:
        # Start Begin Routine snippet

        arrow_x_pos = -0.5
        ISI_duration = np.random.uniform(3)

        writer_object.writerow(["trial_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # Finish Begin Routine snippet
      End Routine:
        # Start End Routine snippet
        if key_resp_2.keys == 'left':
            arrow_x_pos = -0.5
            isReinforced = np.random.binomial(1, prob1)

        elif key_resp_2.keys == 'right':
            arrow_x_pos = 0.5
            isReinforced = np.random.binomial(1, prob2)

        elif key_resp_2.keys == None: # replace None from Python with 'none' string
            nMissed += 1
            isReinforced = 0
            key_resp_2.keys = 'none'

        if key_resp_2.keys != 'none':  # we had a response
            trials.addData("wasRewarded", isReinforced)
        else: # we did not have a response
            trials.addData("wasRewarded", 0) #never rewarded if did not respond
        trials.addData("globalTime", globalClock.getTime())

        # save in csv
        writer_object.writerow(["trial_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # Finish End Routine snippet
      Each Frame:
        # Start Each Frame snippet

        #tGlobal = globalClock.getTime()

        if debug:
            show_debugging_stuff()

        # Finish Each Frame snippet
  Routine ISI1
    CodeComponent code_4
      Begin Routine:
        ISI_duration = np.random.uniform(3)
    StaticComponent isi1
      stopVal [duration (s)] = $ISI_duration
      startVal [time (s)] = 0.0
  Routine calibrate
    CodeComponent code_16
      Begin Experiment:
        #!/usr/bin/env python
        # -*- coding: utf-8 -*-

        """Simple iohub eye tracker device demo. Shows how monitoring for central
        fixation monitoring could be done.
        No iohub config .yaml files are needed for this demo.
        Demo config is setup for an EyeLink(C) 1000 Desktop System.
        To to use a different eye tracker implementation, change the
        iohub_tracker_class_path and eyetracker_config dict script variables.
        """
        from __future__ import absolute_import, division, print_function

        from psychopy import core, visual
        from psychopy.iohub.client import launchHubServer

        # Number if 'trials' to run in demo
        TRIAL_COUNT = 2
        # Maximum trial time / time timeout
        T_MAX = 10.0

        iohub_tracker_class_path = 'eyetracker.hw.sr_research.eyelink.EyeTracker'
        eyetracker_config = dict()
        eyetracker_config['name'] = 'tracker'
        eyetracker_config['model_name'] = 'EYELINK 1000 DESKTOP'
        eyetracker_config['simulation_mode'] = False
        eyetracker_config['runtime_settings'] = dict(sampling_rate=1000,
                                                     track_eyes='RIGHT')

        # Since no experiment or session code is given, no iohub hdf5 file
        # will be saved, but device events are still available at runtime.
        io = launchHubServer(**{iohub_tracker_class_path: eyetracker_config})

        # Get some iohub devices for future access.
        keyboard = io.devices.keyboard
        display = io.devices.display
        tracker = io.devices.tracker

        # run eyetracker calibration
        r = tracker.runSetupProcedure()
        win = visual.Window(display.getPixelResolution(),
                            units='pix',
                            fullscr=True,
                            allowGUI=False
                            )

        gaze_ok_region = visual.Circle(win, radius=200, units='pix')

        gaze_dot = visual.GratingStim(win, tex=None, mask='gauss', pos=(0, 0),
                                      size=(66, 66), color='red', units='pix')

        text_stim_str = 'Eye Position: %.2f, %.2f. In Region: %s\n'
        text_stim_str += 'Press space key to start next trial.'
        missing_gpos_str = 'Eye Position: MISSING. In Region: No\n'
        missing_gpos_str += 'Press space key to start next trial.'

        side_str = 'Side: %s' # this is to show which side the participant is looking at

        text_stim = visual.TextStim(win, text=text_stim_str,
                                    pos=[0, int((-win.size[1]/2)*0.8)], height=24,
                                         color='black',
                                         alignHoriz='center',
                                         alignVert='center',
                                         wrapWidth=win.size[0] * .9)

        text_stim2 = visual.TextStim(win, text=side_str,
                                    pos=[0.8, int((-win.size[1]/2)*0.8)], height=24,
                                         color='red',
                                         alignHoriz='center',
                                         alignVert='center',
                                         wrapWidth=win.size[0] * .9)

        text_stim3 = visual.TextStim(win, text="REWARD!",
                                    pos=[0.1, int((-win.size[1]/2)*0.1)], height=24,
                                         color='green',
                                         alignHoriz='center',
                                         alignVert='center',
                                         wrapWidth=win.size[0] * .9)

        # Run Trials.....
        t = 0
        window = 20 # number of frames to check fixation
        gazeOK = [] # list to save all x positions in the last n frames (n=window)
  Routine action
    ImageComponent resp_type_img
      pos = [0.0, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $resp_img
      size = (0.5, 0.5)
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent left_frac_1
      pos = [-0.5, 0.0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $stim1
      size = .7
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    ImageComponent left_frac_2
      pos = [0.5,0.0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $stim2
      size = .7
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    CodeComponent code_11
  Routine rnf_delivery
    TextComponent rnf_delivery_txt
      color = Red
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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      text:
        Any text

        including line breaks
    CodeComponent code_9
      Begin Routine:
        writer_object.writerow(["rnf_delivery_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        if isReinforced:
            if reward=="money":
                if key_resp_2.keys == "left":
                    rnf_delivery_txt.setText("You have won %d tokens!" %mag1)
                    rnf_delivery_txt.setColor([1,1,1], colorSpace="rgb")
                elif key_resp_2.keys == "right":
                    rnf_delivery_txt.setText("You have won %d tokens!" %mag2)
                    rnf_delivery_txt.setColor([1,1,1], colorSpace="rgb")
            elif reward=="juice":
                if key_resp_2.keys == "left":
                    rnf_delivery_txt.setText("You have won %d squirts of juice!" %mag1)
                    rnf_delivery_txt.setColor([1,1,1], colorSpace="rgb")
                    #for squirt in range(mag1):
                    #    p.run(address)
                    #    time.sleep(.5)
                elif key_resp_2.keys == "right":
                    rnf_delivery_txt.setText("You have won %d squirts of juice!" %mag2)
                    rnf_delivery_txt.setColor([1,1,1], colorSpace="rgb")
                    #for squirt in range(mag2):
                    #    p.run(address)
                    #    time.sleep(.5)
        elif not isReinforced:
            rnf_delivery_txt.setText("Nothing won")
            rnf_delivery_txt.setColor([1,-1,-1], colorSpace="rgb")
      End Routine:
        writer_object.writerow(["rnf_delivery_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])
  Routine cue2
    ImageComponent second_cue
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0
      image [set every repeat] = $stim2
      size = .7
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    CodeComponent code_13
      Begin Routine:
        # START BEGIN ROUTINE CUE2 SNIPPET

        writer_object.writerow(["cue2_On", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # END BEGIN ROUTINE CUE2 SNIPPET
      End Routine:
        # START END ROUTINE CUE2 SNIPPET

        writer_object.writerow(["cue2_Off", str(globalClock.getTime()), expInfo['participant'], str(trials.thisN), expInfo['session'], reward, str(prob1), str(prob2), str(mag1), str(mag2), '', '', '', trial_ID])

        # FINISH END ROUTINE CUE2 SNIPPET
Flow
  Routine calibrate
  Routine wait_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'conditions_'+expInfo['reward']+'.xlsx'
    loopType = random
    nReps = 1
    Selected rows = 20:23
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    Routine cue1
    Routine ISI1
    Routine cue2
    Routine ISI2
    Routine trial
    Routine ISI3
    Routine chosen
    Routine ISI4
    Routine feedback
    Routine ISI5
    Routine rnf_delivery
    Routine ISI6
  LoopTerminator trials
  Routine goodbye
